MATLABInstrumentDriver
FileVersion: 1.0
DriverName: lecroy_LabMaster.mdd
DriverType: MATLAB interface object
InstrumentType: Oscilloscope
InstrumentManufacturer: LeCroy
InstrumentModel: LabMaster
InstrumentVersion: 1.5

CreateInitCode
  Code:
    function init(obj)
    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
    % initializes driverData
    driverData = get(obj, 'DriverData');
    driverData.measurment.type='FREQ';
    driverData.trace = 'TA';
    driverData.measurment.source = 'C1';
    driverData.sc = 'C1';
    driverData.fc = 'C1';
    driverData.source = 'C1';
    driverData.header = [];

    % Extract the interface object and configure it.
    % This driver will work with either TCPIP or GPIB.
    interface = get(obj, 'Interface');
    interfaceClass = class(interface);
    driverData.isTcpip = strcmp('tcpip', interfaceClass);

    % If using TCPIP, configure the remoteport to the VICP default
    if driverData.isTcpip
        set(interface, 'RemotePort', 1861); %the VICP port
    end

    % Save the DriverData
    set(obj, 'DriverData', driverData);

ConnectInitCode
  Code:
    function init(obj)
    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
    % Get the Util group and Interface
    util = get(obj, 'Util');
    interface = get(obj, 'Interface');

    % Configure the buffer to allow space for the entire waveform.
    MAX_HEADER = 1e3;
    %This was not working on scopes with various memory sizes.  See lines 112->
    %116
    %memorySize = invoke(util, 'getproperty', 'Memory_SIZe?', '%g');
    memorySize = 101000;
    bufferSize = memorySize+MAX_HEADER;
    % Ensure that the interface is closed for configuration
    if ~strcmp(get(interface, 'Status'), 'closed')
        fclose(interface);
    end

    set(interface, 'InputBufferSize', bufferSize);
    set(interface, 'OutputBufferSize', bufferSize);

    if strcmp(get(interface, 'Status'), 'closed')
        fopen(interface);
    end

    % If HEADER is not OFF then responses retrieved from
    % the device will not match what is expected, and the driver will not
    % function properly.
    invoke(util, 'sendcommand', 'COMM_HEADER OFF'); %ResponseHeaderState is readonly

    % Clear the Standard Event Status Register (SESR) to remove possible Power
    % on event, which would otherwise be returned by getError.
    invoke(util, 'getproperty', 'CMR?', '%d');

    % LeCroy scopes publish the format of the waveform (WAVEDESC) with the
    % TEMPLATE? query.  By reading and parsing that, the code can determine
    % where all of the fields in the waveform are regardless of changes to
    % the scope.

    % Read WAVEDESC header
    invoke(util, 'sendcommand', 'TEMPLATE?');
    template = char(invoke(util, 'readbin', 'int8')');

    % Extract the starting and ending blocks for each field of the
    % waveform template.
    idxWaveDesc = regexp(template,'(WAVEDESC: BLOCK)|(ENDBLOCK)','start');
    templateStruct=regexp(template(idxWaveDesc(1): idxWaveDesc(2)),...
        '<(?<idxStart>[0-9 ]*)>[\s]*(?<name>[\w]+):\s*(?<type>[\w]+)','names');

    % Convert the indexes (currently character arrays) to numbers and account
    % for the initial byte offset (headerOffset) to index into the waveform.
    % Additionally, convert the known types in the waveform to MATLAB types.
    % Not all possible types are accounted for.

    headerOffset = 16;

    for i=1:length(templateStruct)
        % convert to numbers (from chars) and add byte offset
        templateStruct(i).idxStart = ...
            str2num(templateStruct(i).idxStart) + headerOffset;

        % convert template type names to MATLAB types
        templateValues = {'string', 'byte', 'word',  'long',  'float',  'double', 'text', 'unit_definition'};
        matlabValues = {  'char',   'int8', 'int16', 'int32', 'single', 'double', 'uint8', 'uint8'};
        idx = strmatch(templateStruct(i).type, templateValues);
        if ~isempty(idx)
            templateStruct(i).type = matlabValues{idx};
        end
    end

    % This parses all but the last item of the of the template because
    % the last item isn't necessary and the code is cleaner.
    % Store the starting and ending field indices under fieldnames (where the
    % name is the property name from the waveform header) of a structure.
    for i=1:length(templateStruct)-1
        wd.(templateStruct(i).name).idxStart = ...
            templateStruct(i).idxStart;
        wd.(templateStruct(i).name).idxEnd = ...
            templateStruct(i+1).idxStart - 1; %it ends at the start of the next item
        wd.(templateStruct(i).name).type = templateStruct(i).type;
    end

    % A function to extract a field, TYPECAST it and return a double representation
    % of the value.
    makeTemplateParser = @(field) ...
        @(wform) double(typecast(...
        int8(wform(field.idxStart:field.idxEnd)), ...
        field.type));

    % A function to modify the above function to return a deblanked string.
    makeTextParser = @(fcn) ...
        @(wform) deblank(char(fcn(wform)));

    driverData = get(obj, 'DriverData');

    % Using the above defined functions, I can create extractor functions
    % which will extract the desired field from a given waveform header.
    driverData.wd.getWAVE_ARRAY_COUNT = makeTemplateParser(wd.WAVE_ARRAY_COUNT);
    driverData.wd.getHORIZ_INTERVAL   = makeTemplateParser(wd.HORIZ_INTERVAL);
    driverData.wd.getHORIZ_OFFSET     = makeTemplateParser(wd.HORIZ_OFFSET);
    driverData.wd.getHORUNIT          = makeTextParser(makeTemplateParser(wd.HORUNIT));
    driverData.wd.getVERTICAL_GAIN    = makeTemplateParser(wd.VERTICAL_GAIN);
    driverData.wd.getVERTICAL_OFFSET  = makeTemplateParser(wd.VERTICAL_OFFSET);
    driverData.wd.getVERTUNIT         = makeTextParser(makeTemplateParser(wd.VERTUNIT));

    set(obj, 'DriverData', driverData);

    MAX_HEADER = 1e3;
    memorySize = invoke(util, 'getproperty', 'Memory_SIZe?', '%s');
    memorySize = strrep(lower(memorySize),'k','000');
    memorySize = strrep(lower(memorySize),'m','000000');
    memorySize = strrep(lower(memorySize),'g','000000000');
    bufferSize = str2num(memorySize) + MAX_HEADER;

CleanupCode
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
Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property Date
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % Query the instrument.
      propertyValue = invoke(get(obj, 'Util'), 'getproperty', 'DATE?', '%s');
      propertyValue = datenum(propertyValue, 'dd,mmm,yyyy,HH,MM,SS'); %convert the string response
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % Convert from the datenum to a string if a datenum is passed
      if ischar(propertyValue)
          % pass SNTP through
          argument = propertyValue;
      else
          % convert to datestr
          argument = datestr(propertyValue, 'dd,mmm,yyyy,HH,MM,SS');
      end
      % determines what code to send to the instrument
      to_interface = sprintf('DATE %s', argument);

      % sets the instrument
      invoke(get(obj, 'Util'), 'sendcommand', to_interface);
    PermissibleType: Double none
    PermissibleType: String enum [sntp=SNTP]
    DefaultValue: 0
    ReadOnly: never
    Description: Queries the oscilloscope's internal date. The argument and return value is a MATLAB datenum.

  Property Identity
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = invoke(get(obj, 'Util'), 'getproperty', '*IDN?', '%s');
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    PermissibleType: String none
    ReadOnly: always

  Property ResponseHeaderState
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = invoke(get(obj, 'Util'), 'getproperty', 'COMM_HEADER?', '%s');
      mlValues = {'on', 'off'};
      instrValues = {'ON', 'OFF'};
      propertyValue = mlValues{strmatch(propertyValue, instrValues)};
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    PermissibleType: String enum [on=ON, off=OFF]
    DefaultValue: off
    ReadOnly: always
    Description: Queries the Response Header Enable State that causes the oscilloscope to either include or omit headers on query responses.

      NOTE: Although the property is not truly read only for the instrument, the value must be 'off' for the driver to operate correctly.  As a result, it is set as read-only for the driver.

  Method autoset
    MCode:
      function autoset(obj)
      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invoke(get(obj, 'Util'), 'sendcommand', 'AUTO_SETUP');
    Description: AUTOSET Automatic parameter adjustment.

      INVOKE(OBJ, 'autoset') causes the oscilloscope to adjust its vertical, horizontal, and trigger controls to display a more stable waveform.

  Method beep
    MCode:
      function beep(obj, state)
      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
      invoke(get(obj, 'Util'), 'sendcommand', 'BUZZ BEEP');
    Description: BEEP controls the built-in piezo-electric buzzer.

      INVOKE(OBJ,'beep') causes the buzzer to sound briefly.

  Method drivertest
    MCode:
      function status = drivertest(obj)
      %   This is the machine generated code that tests a MATLAB instrument driver,
      %   lecroy_8600a.mdd.
      %
      %   The test consists of multiple test steps that can test the MATLAB instrument
      %   drivers functions and properties.
      %
      %   The test code was generated with the MIDTEST GUI. For more information
      %   on MIDTEST, type 'instrhelp midtest' at the MATLAB command prompt.
      %
      %   To run the test, invoke the drivertest function using the following
      %   command:
      %   status = invoke(obj,'drivertest'); % Where obj is the device object
      %
      %   See also ICDEVICE, MIDTEST.
      %

      %   Creation time: 06-May-2006

      %% Initialization and connect code
      % Wrap entire test in try catch.
      try

      fprintf('Test: LeCroy_8600_wavemaster_propertiesTest\n');
      fprintf(['Start time: ' datestr(now) '\n']);

      % Initialize variables.
      varargout              = {};
      noErrorMsg             = '0;0';
      stepWarningOccurred    = false;
      warningOccurred        = false;
      errorOccurred          = false;

      % Construct the device object.
      deviceObj = obj;

      %% Save State
      % Function_savestate (Function Test Step)
      fprintf('%s\n','Test Step 1a: Save state');

      errorcode = false;
      try
          % Execute the function.
          groupObj = get(deviceObj, 'System');
          groupObj = groupObj(1);
          invoke(groupObj, 'savestate', 5);
          pause(20);     % wait for instrument to save state

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

          % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while executing the function.\n');
              fprintf([result '\n']);
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the function.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Default Setup
      % Function_defaultSetup (Function Test Step)
      fprintf('%s\n','Test Step 1b: DefaultSetup');

      errorcode = false;
      try
          % Execute the function.
          invoke(deviceObj, 'reset');
          pause(20);     % wait for instrument to go back to default setup

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

          % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while executing the function.\n');
              fprintf([result '\n']);
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the function.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Function:Parent:Autoset
      fprintf('%s\n','Test Step 1c: Autoset');
      % Test Step 9: Function:Parent:Autoset (Function Test Step)

      errorcode = false;
      try
          % Execute the function.
          invoke(deviceObj, 'autoset');
          pause(20); % need to wait for the instrument to finish autoset

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

          % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while executing the function.\n');
              fprintf([result '\n']);
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the function.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Read waveform
      % Test Step 1d: Function_readwaveform (Function Test Step)
      fprintf('%s\n','Test Step 1d: Read Waveform');

      errorcode = false;
      try
          % Execute the function.
          groupObj = get(deviceObj, 'Waveform');
          groupObj = groupObj(1);
          [y,x] = invoke(groupObj, 'readwaveform', 'channel1');
          pause(20);     % wait for the read operation to finish

          % Store the result so that it can be returned.
          varargout = {varargout{:}, y,x};

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

          % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while executing the function.\n');
              fprintf([result '\n']);
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the function.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Store Waveform
      % Test Step 1e: Function_storewaveform (Function Test Step)
      fprintf('%s\n','Test Step 1e: Store Waveform');

      errorcode = false;
      try
          % Execute the function.
          groupObj = get(deviceObj, 'Waveform');
          groupObj = groupObj(1);
          invoke(groupObj, 'storewaveform','channel1','memory1');
          pause(20);     % wait for instrument to store waveform

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

          % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while executing the function.\n');
              fprintf([result '\n']);
          end
      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the function.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% Get_Parent:Date
      % Test Step 2: Get_Date (Get Property Test Step)
      fprintf('%s\n','Test Step 2: Get_Parent:Date');

      errorcode = false;
      try
          % Query the property.
          temp = get(deviceObj, 'Date');

          % Check if instrument error occurred.
          result = invoke(deviceObj,'queryError');
          errorcode = ~strcmpi(result, noErrorMsg);

      % Post information about error if one occurred.
          if (errorcode == true)
              fprintf('An instrument error occurred while getting the property value.\n');
              fprintf([result '\n']);
          end

      catch
          % A MATLAB error occurred.
          errorcode = true;

          % Post information about error.
          fprintf('A MATLAB error occurred while testing the property.\n');
          fprintf([lasterr '\n']);
      end

      % Post message indicating if test step passed.
      if (errorcode == true)
          errorOccurred = true;
          fprintf('Test step status: FAILED\n');
      elseif (stepWarningOccurred == true)
          fprintf('Test step status: PASSED with warnings\n');
      else
          fprintf('Test step status: PASSED\n');
      end

      %% SET Parent:Date
      % Test Step 3: Set_Date (Set Property Test Step)
      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    % Configure the property.
      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    % Check if instrument error occurred.
      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% Post information about error if one occurred.
      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    % A MATLAB error occurred.
      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    % Post information about error.
      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% Post message indicating if test step passed.
      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%% Test Step 4: Get_Parent:Identity
      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% Test Step 4: Get_Parent:Identity (Get Property Test Step)
      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    % Query the property.
      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%% Test Step 5: Set_Acquisition:Timebase
      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% Test Step 4: Set_Acquisition:Timebase (Set Property Test Step)
      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    % Verify that the configured value matches the expected value.
      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        % Get the current property value.
      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        % Compare to the expected value.
      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        % Post information about test step failure.
      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            % Post actual value.
      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            % Post expected value.
      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%% Test Step 6: Set_Acquisition:Delay_test1
      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% Test Step 6: Set_Acquisition:Delay_test1 (Set Property Test Step)
      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%% Test Step 8: Set_Acquisition:Control
      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% Test Step 8: Set_Acquisition:Control (Set Property Test Step)
      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%% Test Step 9: Function:Parent:Autoset
      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% Test Step 9: Function:Parent:Autoset (Function Test Step)
      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    % Execute the function.
      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%% Test Step 10: Get_Acquisition:State
      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% Test Step 10: Get_Acquisition:State (Get Property Test Step)
      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% Verify that the queried value matches the expected value.
      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%% Test Step 11: Set_Channel:Bandwidth
      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% Test Step 11: Set_Channel:Bandwidth (Set Property Test Step)
      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%% Test Step 12: Set_Channel:Coupling
      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% Test Step 12: Set_Channel:Coupling (Set Property Test Step)
      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%% Test Step 13: Set_Channel:Position
      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% Test Step 13: Set_Channel:Position (Set Property Test Step)
      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%% Test Step 14: Set_Channel:Probe
      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% Test Step 14: Set_Channel:Probe (Set Property Test Step)
      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%% Test Step 15: Set_Channel:Scale
      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% Test Step 15: Set_Channel:Scale (Set Property Test Step)
      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%% Test Step 16a: Set_Channel:State
      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% Test Step 16a: Set_Channel:State (Set Property Test Step)
      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%% Test Step 16b: Set_Channel:State
      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% Test Step 16b: Set_Channel:State (Set Property Test Step)
      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%% Test Step 17: Set_Cursor:Type
      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% Test Step 17: Set_Cursor:Type (Set Property Test Step)
      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%% Test Step 18: Set_Cursor:Source
      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% Test Step 18: Set_Cursor:Source (Set Property Test Step)
      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% This test step generated no code. Most likely because a
      % property or function to test was not selected.
      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%% Trigger
      % Test Step 19a: Function_trigger (Function Test Step)
      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%% Test Step 19c: Set_Display:Contrast
      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% Test Step 19: Set_Display:Contrast (Set Property Test Step)
      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%% Test Step 20: Set_Display:Grid
      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% Test Step 20: Set_Display:Grid (Set Property Test Step)
      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%% Test Step 21: Set_Display:Persistence
      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% Test Step 21: Set_Display:Persistence (Set Property Test Step)
      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%% Test Step 22: Set_Display:Style
      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% Test Step 22: Set_Display:Style (Set Property Test Step)
      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%% Test Step 23: Set_Measurement:Type
      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% Test Step 23: Set_Measurement:Type (Set Property Test Step)
      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%% Test Step 24: Set_Measurement:Source
      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% Test Step 24: Set_Measurement:Source (Set Property Test Step)
      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%% Test Step 25: Get_Measurement:Value
      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% Test Step 25: Get_Measurement:Value (Get Property Test Step)
      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%% Test Step 26: Set_Sequence:Max
      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% Test Step 26: Set_Sequence:Max (Set Property Test Step)
      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%% Test Step 27: Set_Sequence:Mode
      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% Test Step 27: Set_Sequence:Mode (Set Property Test Step)
      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%% Test Step 28: Set_Sequence:Segment
      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% Test Step 28: Set_Sequence:Segment (Set Property Test Step)
      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%% Test Step 29: Set_Trigger:Mode
      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% Test Step 29: Set_Trigger:Mode (Set Property Test Step)
      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%% Test Step 30: Set_Trigger:Slope
      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% Test Step 30: Set_Trigger:Slope (Set Property Test Step)
      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%% Test Step 31: Set_Trigger:Source
      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% Test Step 31: Set_Trigger:Source (Set Property Test Step)
      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%% Test Step 32: Set_Trigger:Type
      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% Test Step 32: Set_Trigger:Type (Set Property Test Step)
      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%% Test Step 33: Set_Waveform:ByteOrder
      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% Test Step 33: Set_Waveform:ByteOrder (Set Property Test Step)
      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%% Test Step 34: Set_Waveform:EndingPoint
      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% Test Step 34: Set_Waveform:EndingPoint (Set Property Test Step)
      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%% Test Step 35: Set_Waveform:FirstPoint
      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% Test Step 35: Set_Waveform:FirstPoint (Set Property Test Step)
      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%% Test Step 36: Set_Waveform:MaxNumberPoint
      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% Test Step 36: Set_Waveform:MaxNumberPoint (Set Property Test Step)
      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%% Test Step 37: Set_Waveform:Precision
      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% Test Step 37: Set_Waveform:Precision (Set Property Test Step)
      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%% Load Initial State
      % Test Step 38: Function_loadstate (Function Test Step)
      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%% Cleanup and Posting Results
      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% Post results.
      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    % An error occurred while running the test.
      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
    Description: This function is intended only to test the driver code with an instrument.

  Method initiateSelfTest
    MCode:
      function initiateSelfTest(obj)
      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invoke(get(obj, 'Util'), 'sendcommand', '*TST?');
    Description: Start the instrument's built-in test routine.

      INVOKE(obj, 'initiateSelfTest') initiates the instrument's test routine.

      This is a workaround to a limitation of instrument drivers.  It replaces SELFTEST(ob).

  Method queryError
    MCode:
      function errormsg = queryError(obj)
      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errormsg = invoke(get(obj, 'Util'), 'getproperty', '*ESR?; CMR?', '%s');
    Description: Query the error code from the last command on the instrument.

      INVOKE(obj, 'queryError') returns the error code from the instrument.

      This is a workaround to a limitation of instrument drivers.  It replaces GETERROR(obj).

  Method reset
    MCode:
      function reset(obj)
      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invoke(get(obj, 'Util'), 'sendcommand', '*RST;COMM_HEADER OFF;');
    Description: Reset the state of the instrument to defaults.

      INVOKE(obj, 'reset') returns the instrument to its default configuration.

      This is a workaround to a limitation of instrument drivers.  It replaces DEVICERESET(obj).

  Method selfcalibrate
    MCode:
      function selfcalibrate(obj)
      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
      invoke(get(obj, 'Util'), 'sendcommand', '*CAL?');
    Description: SELFCALIBRATE Performs an internal self-calibration.

      INVOKE(obj, 'selfcalibrate') to self-calibrate the oscilloscope. This function does not return any status information.

Group acquisition
  Description: The aquisition group define properties and function related to how the waveform is acquired and the timebase.
  Size: 1
  Mappings ChannelMap Command="Acquisition1" Index="1"

  Property Control
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = invoke(get(get(obj, 'Parent'), 'Util'), 'getproperty', 'TRig_MoDe?', '%s');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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invoke(get(get(obj, 'Parent'), 'Util'), 'setproperty', 'TRig_MoDe', propertyValue);
    PermissibleType: String enum [single=SINGLE, run=NORM, stop=STOP, auto=AUTO]
    DefaultValue: Run
    ReadOnly: never
    Description: Tells the oscilloscope when to stop taking acquisitions for edge trigger type.

  Property Delay
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = invoke(get(get(obj, 'Parent'), 'Util'), 'getproperty', 'TRig_DeLay?', '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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invoke(get(get(obj, 'Parent'), 'Util'), 'setproperty', 'TRig_DeLay', propertyValue);
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Sets or queries the capture offset from the trigger event.

  Property State
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = get(obj, 'Control');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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invoke(set(obj, 'Control', propertyValue));
    PermissibleType: String enum [stop=STOP, run=NORM, auto=AUTO, single=SINGLE]
    DefaultValue: run
    ReadOnly: never
    Description: Starts or stops oscilloscope acquisitions.

  Property Timebase
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = invoke(get(get(obj, 'Parent'), 'Util'), 'getproperty', 'Time_DIV?', '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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invoke(get(get(obj, 'Parent'), 'Util'), 'setproperty', 'Time_DIV', propertyValue);
    PermissibleType: Double bounded [Max="Infinity" Min="0.0"]
    DefaultValue: 1.0
    ReadOnly: never
    Description: Sets the time per divison for the main time base.  The instrument offers a large but discrete set of values for this property.  Incorrect values will be coerced to valid values by the instrument.

Group channel
  Size: 80
  Mappings
    ChannelMap Command="C80" Index="80"
    ChannelMap Command="C79" Index="79"
    ChannelMap Command="C78" Index="78"
    ChannelMap Command="C77" Index="77"
    ChannelMap Command="C76" Index="76"
    ChannelMap Command="C75" Index="75"
    ChannelMap Command="C74" Index="74"
    ChannelMap Command="C73" Index="73"
    ChannelMap Command="C72" Index="72"
    ChannelMap Command="C71" Index="71"
    ChannelMap Command="C70" Index="70"
    ChannelMap Command="C69" Index="69"
    ChannelMap Command="C68" Index="68"
    ChannelMap Command="C67" Index="67"
    ChannelMap Command="C66" Index="66"
    ChannelMap Command="C65" Index="65"
    ChannelMap Command="C64" Index="64"
    ChannelMap Command="C63" Index="63"
    ChannelMap Command="C62" Index="62"
    ChannelMap Command="C61" Index="61"
    ChannelMap Command="C60" Index="60"
    ChannelMap Command="C59" Index="59"
    ChannelMap Command="C58" Index="58"
    ChannelMap Command="C57" Index="57"
    ChannelMap Command="C56" Index="56"
    ChannelMap Command="C55" Index="55"
    ChannelMap Command="C54" Index="54"
    ChannelMap Command="C53" Index="53"
    ChannelMap Command="C52" Index="52"
    ChannelMap Command="C51" Index="51"
    ChannelMap Command="C50" Index="50"
    ChannelMap Command="C49" Index="49"
    ChannelMap Command="C48" Index="48"
    ChannelMap Command="C47" Index="47"
    ChannelMap Command="C46" Index="46"
    ChannelMap Command="C45" Index="45"
    ChannelMap Command="C44" Index="44"
    ChannelMap Command="C43" Index="43"
    ChannelMap Command="C42" Index="42"
    ChannelMap Command="C41" Index="41"
    ChannelMap Command="C40" Index="40"
    ChannelMap Command="C39" Index="39"
    ChannelMap Command="C38" Index="38"
    ChannelMap Command="C37" Index="37"
    ChannelMap Command="C36" Index="36"
    ChannelMap Command="C35" Index="35"
    ChannelMap Command="C34" Index="34"
    ChannelMap Command="C33" Index="33"
    ChannelMap Command="C32" Index="32"
    ChannelMap Command="C31" Index="31"
    ChannelMap Command="C30" Index="30"
    ChannelMap Command="C29" Index="29"
    ChannelMap Command="C28" Index="28"
    ChannelMap Command="C27" Index="27"
    ChannelMap Command="C26" Index="26"
    ChannelMap Command="C25" Index="25"
    ChannelMap Command="C24" Index="24"
    ChannelMap Command="C23" Index="23"
    ChannelMap Command="C22" Index="22"
    ChannelMap Command="C21" Index="21"
    ChannelMap Command="C20" Index="20"
    ChannelMap Command="C19" Index="19"
    ChannelMap Command="C18" Index="18"
    ChannelMap Command="C17" Index="17"
    ChannelMap Command="C16" Index="16"
    ChannelMap Command="C15" Index="15"
    ChannelMap Command="C14" Index="14"
    ChannelMap Command="C13" Index="13"
    ChannelMap Command="C12" Index="12"
    ChannelMap Command="C11" Index="11"
    ChannelMap Command="C10" Index="10"
    ChannelMap Command="C9" Index="9"
    ChannelMap Command="C8" Index="8"
    ChannelMap Command="C7" Index="7"
    ChannelMap Command="C6" Index="6"
    ChannelMap Command="C5" Index="5"
    ChannelMap Command="C4" Index="4"
    ChannelMap Command="C3" Index="3"
    ChannelMap Command="C2" Index="2"
    ChannelMap Command="C1" Index="1"

  Property BandwidthLimit
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % queries the instrument
      invoke(util, 'sendcommand', 'BandWidth_Limit?');

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');

      % Bandwidth_limit is returned for every channel.  Return the channel of interest.
      try
          %gets the hardware index number
          hw = obj(1).HwIndex;
          %There are two items returned for each channel:
          %channel then value.  We would like to index into the
          %value.
          hw = hw * 2;

          % returns the value
          propertyValue = lower(idn{hw});
      catch
          propertyValue = lower(idn{1});
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the hardware index number
      hw = obj(1).HwIndex;

      % determines what code to send to the instrument
      to_interface = sprintf('BandWidth_Limit C%i,%s',hw,propertyValue);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface)
    PermissibleType: String enum [200mhz=200MHZ, 1ghz=1GHZ, 3ghz=3GHZ, 4ghz=4GHZ, on=20MHZ, off=OFF]
    DefaultValue: on
    ReadOnly: never
    Description: Sets or queries the bandwidth setting of the specified oscilloscope channel.

  Property Coupling
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the hardware index number
      hw = obj.HwIndex;

      % determines what code to send to the instrument
      to_interface = sprintf('C%i:CouPLing?',hw);

      % queries the instrument
      invoke(util, 'sendcommand', to_interface);

      % retrieve the value from the instrument
      value = invoke(util, 'scanresponse');
      propertyValue = value{1};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the hardware index number
      hw = obj.HwIndex;

      % determines what code to send to the instrument
      to_interface = sprintf('C%i:CouPLing %s', hw, propertyValue);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface);
    PermissibleType: String enum [ac=A1M, dc=D1M, ground=GND, 50ohms=D50]
    DefaultValue: ac
    ReadOnly: never

  Property Position
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the hardware index number
      hw = obj(1).HwIndex;

      % Query the instrument.
      to_interface = sprintf('C%i:OFfSeT?', hw);
      propertyValue = invoke(util, 'getproperty', to_interface, '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the hardware index number
      hw = obj(1).HwIndex;

      % determines what code to send to the instrument
      to_interface = sprintf('C%i:OFfSeT %i', hw, propertyValue);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface);
    PermissibleType: Double bounded [Max="10.0" Min="-10.0"]
    DefaultValue: 0
    ReadOnly: never
    Description: Sets or queries the vertical position of the specified oscilloscope channel.

  Property Probe
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the hardware index number
      hw = obj(1).HwIndex;

      % Query the instrument
      to_interface = sprintf('C%i:ATTeNuation?', hw);
      propertyValue = invoke(util, 'getproperty', to_interface, '%g');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the hardware index number
      hw = obj(1).HwIndex;

      % determines what code to send to the instrument
      to_interface = sprintf('C%i:ATTeNuation %i',hw,propertyValue);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface)
    PermissibleType: Double bounded [Max="Infinity" Min="0.0"]
    DefaultValue: 1.0
    ReadOnly: never
    Description: Sets or queries the attenuation factor of the specified channel.  The instrument offers a large but discrete set of values for this property.  Incorrect values will be coerced to valid values by the instrument.

  Property Scale
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the hardware index number
      hw = obj(1).HwIndex;

      % Query the instrument.
      to_interface = sprintf('C%i:Volt_DIV?',hw);
      propertyValue = invoke(util, 'getproperty', to_interface, '%g')
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the hardware index number
      hw = obj(1).HwIndex;

      % determines what code to send to the instrument
      to_interface = sprintf('C%i:Volt_DIV %i',hw,propertyValue);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface);
    PermissibleType: Double bounded [Max="Infinity" Min="0.0"]
    DefaultValue: 20.0
    ReadOnly: never
    Description: Sets or queries the vertical gain of the specified oscilloscope channel.

  Property State
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the hardware index number
      hw = obj(1).HwIndex;

      % determines what code to send to the instrument
      to_interface = sprintf('C%i:TRAce?',hw);

      % queries the instrument
      invoke(util, 'sendcommand', to_interface)

      % retrieve the value from the instrument
      value = invoke(util, 'scanresponse');

      % returns the value
      propertyValue=value{1};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the hardware index number
      hw = obj(1).HwIndex;

      % determines what code to send to the instrument
      to_interface = sprintf('C%i:TRAce %s',hw,propertyValue);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface)
    PermissibleType: String enum [off=OFF, on=ON ]
    DefaultValue: off
    ReadOnly: never
    Description: Enable or disable the display of the waveform on the scope.

Group cursor
  Size: 1
  Mappings ChannelMap Command="Cursor1" Index="1"

  Property CursorType
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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invoke(get(get(obj, 'Parent'), 'Util'), 'sendcommand', 'CuRsor_MeaSure?');
      propertyValue = invoke(get(get(obj, 'Parent'), 'Util'), 'readresponse', '%s');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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invoke(get(get(obj, 'Parent'), 'Util'), 'setproperty', 'CuRsor_MeaSure', propertyValue);
    PermissibleType: String enum [fail=FAIL, horizontal relative=HREL, pass=PASS, vertical absolute=VABS, vertical relative=VREL, custom stat=CUST, STAT, horizontal parameters stat=HPAR, STAT, horizontal relative abs=HREL, ABS, horizontal relative delta=HREL, DELTA, horizontal relative slope=HREL, SLOPE, standard voltage parameters stat=VPAR, STAT, vertical relative abs=VREL, ABS, vertical relative delta=VREL, DELTA, none=OFF, horizontal absolute=HABS, custom=CUST, custom stat=CUST, STAT, horizontal parameters=HPAR, horizontal relative delta + abs=HREL, DELTA+ABS, vertical relative delta + abs=VREL, DELTA+ABS, vertical parameters=VPAR]
    DefaultValue: fail
    ReadOnly: never
    Description: Selects the cursor type.

  Property HorizontalBarPosition1
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the driverData
      driverData = get(device, 'DriverData');

      % gets the user specified source
      chan = driverData.source;

      % determines what code to send to the instrument
      to_interface = sprintf('%s:PEr_Cursor_Set? HABS',chan);

      % queries the instrument
      invoke(util, 'sendcommand', to_interface)

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');

      % returns the value
      if ~isempty(idn)
          propertyValue = idn{2};
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the driverData
      driverData = get(device, 'DriverData');

      % gets the user specified source
      chan = driverData.source;

      % determines what code to send to the instrument
      to_interface = sprintf('%s:PEr_Cursor_Set HABS, %i',chan,propertyValue);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface)
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Specifies the first horizontal bar cursor position.

  Property HorizontalBarPosition2
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the driverData
      driverData = get(device, 'DriverData');

      % gets the user specified source
      chan = driverData.source;

      % determines what code to send to the instrument
      to_interface = sprintf('%s:PEr_Cursor_Set? HREF',chan);

      % queries the instrument
      invoke(util, 'sendcommand', to_interface)

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');

      % returns the value
      if ~isempty(idn)
          propertyValue = idn{2};
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the driverData
      driverData = get(device, 'DriverData');

      % gets the user specified source
      chan = driverData.source;

      % determines what code to send to the instrument
      to_interface = sprintf('%s:PEr_Cursor_Set HREF, %i',chan,propertyValue);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface)
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Specifies the second horizontal bar cursor position.

  Property Source
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the driverData
      driverData = get(get(obj, 'Parent'), 'DriverData');

      % gets the user specified source
      propertyValue = driverData.source;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the driverData
      driverData = get(get(obj, 'Parent'), 'DriverData');

      % sets the user specified source
      driverData.source = propertyValue;
      set(get(obj, 'Parent'), 'DriverData', driverData);
    PermissibleType: String enum [channel1=C1, channel2=C2, channel3=C3, channel4=C4, channel5=C5, channel6=C6, channel7=C7, channel8=C8, channel9=C9, channel10=C10, channel11=C11, channel12=C12, channel13=C13, channel14=C14, channel15=C15, channel16=C16, channel17=C17, channel18=C18, channel19=C19, channel20=C20, channel21=C21, channel22=C22, channel23=C23, channel24=C24, channel25=C25, channel26=C26, channel27=C27, channel28=C28, channel29=C29, channel30=C30, channel31=C31, channel32=C32, channel33=C33, channel34=C34, channel35=C35, channel36=C36, channel37=C37, channel38=C38, channel39=C39, channel40=C40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]
    DefaultValue: Channel1
    ReadOnly: never
    Description: Sets or queries the waveform that is the source of the vertical and horizontal scale factors used in determining cursor values.

  Property VerticalBarPosition1
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the driverData
      driverData = get(device, 'DriverData');

      % gets the user specified source
      chan = driverData.source;

      % determines what code to send to the instrument
      to_interface = sprintf('%s:PEr_Cursor_Set? VABS',chan);

      % queries the instrument
      invoke(util, 'sendcommand', to_interface)

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');

      % returns the value
      if ~isempty(idn)
          propertyValue = idn{2};
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the driverData
      driverData = get(device, 'DriverData');

      % gets the user specified source
      chan = driverData.source;

      % determines what code to send to the instrument
      to_interface = sprintf('%s:PEr_Cursor_Set VABS, %i',chan,propertyValue);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface)
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Specifies the first vertical bar cursor position.

  Property VerticalBarPosition2
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the driverData
      driverData = get(device, 'DriverData');

      % gets the user specified source
      chan = driverData.source;

      % determines what code to send to the instrument
      to_interface = sprintf('%s:PEr_Cursor_Set? VREF',chan);

      % queries the instrument
      invoke(util, 'sendcommand', to_interface)

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');

      % returns the value
      if ~isempty(idn)
          propertyValue = idn{2};
      end
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the driverData
      driverData = get(device, 'DriverData');

      % gets the user specified source
      chan = driverData.source;

      % determines what code to send to the instrument
      to_interface = sprintf('%s:PEr_Cursor_Set VREF, %i',chan,propertyValue);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface)
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: Specifies the second vertical bar cursor position.

Group display
  Size: 1
  Mappings ChannelMap Command="Display1" Index="1"

  Property Contrast
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % queries the instrument
      invoke(util, 'sendcommand', 'INTenSity?')

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');

      % The response looks like TRACE, %val, GRID, %val
      % We are only interested in the GRID intensity
      propertyValue = idn{4};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % determines what code to send to the instrument
      to_interface = sprintf('INTenSity GRID,%i',propertyValue);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface)
    PermissibleType: Double bounded [Max="100.0" Min="0.0"]
    DefaultValue: 50
    ReadOnly: never
    Description: Set or query the contrast of the display grid.  The instrument offers a large but discrete set of values for this property.  Incorrect values will be coerced to valid values by the instrument.

  Property Grid
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = invoke(get(get(obj, 'Parent'), 'Util'), 'getproperty', 'GRID?', '%s');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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invoke(get(get(obj, 'Parent'), 'Util'), 'setproperty', 'GRID', propertyValue);
    PermissibleType: String enum [single=SINGLE, dual=DUAL, quad=QUAD, octal=OCTAL, auto=AUTO, xy=XYONLY, xysingle=XYSINGLE, xydual=XYDUAL, xy=XYONLY]
    DefaultValue: single
    ReadOnly: never
    Description: Sets or queries the instrument's grid style.

  Property Persistence
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % Tell the instrument you want it to tell you the value
      invoke(util, 'sendcommand', 'PErsist_SetUp?');

      % queries the instrument
      idn = invoke(util, 'scanresponse');

      % retrieve the value from the instrument
      if(ischar(idn{1}))
          propertyValue = 'infinite';
      else
          propertyValue = idn{1};
      end;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % determines what data type is and sets the instrument
      if(ischar(propertyValue))
          fmt = '%s';
      else
          fmt = '%g';
      end

      invoke(util, 'sendcommand', sprintf(['PErsist_SetUp ', fmt, ',ALL'],propertyValue));
    PermissibleType: String enum [infinite=infinite]
    PermissibleType: Double bounded [Max="Infinity" Min="0.0"]
    DefaultValue: infinite
    ReadOnly: never
    Description: Sets the length of time that data points are displayed.

  Property Style
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = invoke(get(get(obj, 'Parent'), 'Util'), 'getproperty', 'DoT_JoiN?', '%s');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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invoke(get(get(obj, 'Parent'), 'Util'), 'setproperty', 'DoT_JoiN', propertyValue);
    PermissibleType: String enum [dots=ON, vectors=OFF]
    DefaultValue: Dots
    ReadOnly: never
    Description: Selects how to display the waveform data.

Group measurement
  Size: 2
  Mappings
    ChannelMap Command="IMMED" Index="2"
    ChannelMap Command="MEAS1" Index="1"

  Property MeasurementType
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % gets the measurement type from driverData
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.measurment.type;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the driverData
      driverData = get(get(obj, 'Parent'), 'DriverData');

      % sets the user specified source
      driverData.measurment.type = propertyValue;
      set(get(obj, 'Parent'), 'DriverData', driverData)
    PermissibleType: String enum [frequency=FREQ, mean=MEAN, period=PER, peak2peak=PK2PK, crms=CRM, amplitude=AMPL, area=AREA, base=BASE]
    DefaultValue: frequency
    ReadOnly: never
    Description: Sets or query the measurement type.  By default this driver supports the standard measurement types of the oscilloscope, and does not include any measurements supported only by expansion modules.  To add additional measurement types supported by your model, edit the driver using midedit.

  Property Source
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % gets the source from driverData
      driverData = get(get(obj, 'Parent'), 'DriverData');
      propertyValue = driverData.measurment.source;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the driverData
      driverData = get(get(obj, 'Parent'), 'DriverData');

      % sets the user specified source
      driverData.measurment.source = propertyValue;
      set(get(obj, 'Parent'), 'DriverData', driverData)
    PermissibleType: String enum [channel1=C1, channel2=C2, channel3=C3, channel4=C4, channel5=C5, channel6=C6, channel7=C7, channel8=C8, channel9=C9, channel10=C10, channel11=C11, channel12=C12, channel13=C13, channel14=C14, channel15=C15, channel16=C16, channel17=C17, channel18=C18, channel19=C19, channel20=C20, channel21=C21, channel22=C22, channel23=C23, channel24=C24, channel25=C25, channel26=C26, channel27=C27, channel28=C28, channel29=C29, channel30=C30, channel31=C31, channel32=C32, channel33=C33, channel34=C34, channel35=C35, channel36=C36, channel37=C37, channel38=C38, channel39=C39, channel40=C40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]
    DefaultValue: channel1
    ReadOnly: never
    Description: Sets or queries the source of the measurement.

  Property Value
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % gets channel to use for measurement from driverData
      driverData = get(get(obj, 'Parent'), 'DriverData');
      chan = driverData.measurment.source;

      % gets the measurement type
      type = driverData.measurment.type;

      % determines what code to send to the instrument
      to_interface = sprintf('%s:PArameter_VAlue? %s',chan,type);

      % queries the instrument
      invoke(util, 'sendcommand', to_interface)

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');

      % returns the value
      propertyValue = idn{2};
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: always
    Description: Returns the value of a measurement.  If the object is the immediate measurement object (the HwName property is 'IMMED') this property is always valid.  For the standard periodic measurements, it is only a valid valid if the MesesurementType is not 'none'.

Group sequence
  Size: 1
  Mappings ChannelMap Command="Sequence1" Index="1"

  Property Max
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % queries the instrument
      invoke(util, 'sendcommand', 'SEQUENCE?');

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');
      propertyValue = idn{3};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % queries the instrument
      invoke(util, 'sendcommand', 'SEQUENCE?');

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');
      if(strcmp('OFF',idn{1}))
          warning('mode is set to OFF right now and is being changed to ON so that max can be changed')
      end

      % determines what code to send to the instrument
      to_interface = sprintf('SEQUENCE ON,%g,%g ',idn{2},propertyValue);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface)
    PermissibleType: Double bounded [Max="Infinity" Min="0.0"]
    DefaultValue: 50
    ReadOnly: never
    Description: Sets or queries the max size of the sequence mode.  The instrument offers a large but discrete set of values for this property.  Incorrect values will be coerced to valid values by the instrument.

  Property Mode
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % queries the instrument
      invoke(util, 'sendcommand', 'SEQUENCE?');

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');

      % returns the value
      propertyValue = idn{1};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      %get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % determines what code to send to the instrument
      to_interface = sprintf('SEQUENCE %s',propertyValue);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface)
    PermissibleType: String enum [on=ON, off=OFF]
    DefaultValue: off
    ReadOnly: never
    Description: Sets or queries the sequence mode.

  Property Segment
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % queries the instrument
      invoke(util, 'sendcommand', 'SEQUENCE?');

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');

      % returns the value
      propertyValue = idn{2};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % gets the mode from the instrument
      invoke(util, 'sendcommand', 'SEQUENCE?');

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');

      % determines what code to send to the instrument
      to_interface = sprintf('SEQUENCE %s,%i',idn{1},propertyValue);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface);
    PermissibleType: Double enum [50.0, 200.0, 500.0, 2000.0]
    DefaultValue: 50
    ReadOnly: never
    Description: Sets or queries the max number of segments.

Group system
  Size: 1
  Mappings ChannelMap Command="System1" Index="1"

  Method loadstate
    MCode:
      function loadstate(obj, location)
      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% LOCATION is the specified storage location

      %get the icdevice
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % Error checking
          % LOCATION must be a scalar and between 1 and 5, inclusive.
          if ~isnumeric(location)
              error('LOCATION must be numeric');
          elseif location ~= floor(location)
              error('LOCATION must be a scalar');
          elseif  location >5 || location <1
                  error('LOCATION must be between 1 and 5 inclusive');
          end

      % Send memory name query command
      invoke(util, 'sendcommand', ['*RCL ' num2str(location)])
    Description: LOADSTATE  Recall a previously stored state.

      INVOKE(OBJ, 'loadstate', location) restores the state of the oscilloscope from a copy of settings stores in memory.  Location must be a scalar from 1 to 5.

  Method savestate
    MCode:
      function savestate(obj, location)
      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% LOCATION is the specified storage location

      %get the icdevice
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % Error checking
          % LOCATION must be a scalar and between 1 and 5, inclusive.
          if ~isnumeric(location)
              error('LOCATION must be numeric');
          elseif location ~= floor(location)
              error('LOCATION must be a scalar');
          elseif  location >5 || location <1
                  error('LOCATION must be between 1 and 5 inclusive');
          end

      % Send memory name query command
      invoke(util, 'sendcommand', ['*SAV ' num2str(location)])
    Description: SAVESTATE  Save the current state of the oscilloscope.

      INVOKE(OBJ,'savestate',location) stores an instrument configuration at the specified memory location, LOCATION.

Group trigger
  Size: 1
  Mappings ChannelMap Command="Trigger1" Index="1"

  Property Coupling
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the hardware index number
      hw = obj.HwIndex;

      % determines what code to send to the instrument
      to_interface = sprintf('C%i:TRIG_COUPLING?',hw);

      % queries the instrument
      invoke(util, 'sendcommand', to_interface);

      % retrieve the value from the instrument
      value = invoke(util, 'scanresponse');
      propertyValue = value{1};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the hardware index number
      hw = obj.HwIndex;

      % determines what code to send to the instrument
      to_interface = sprintf('C%i:CouPLing %s', hw, propertyValue);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface);
    PermissibleType: String enum [ac1m=AC1M, dc1m=DC1M, 50ohms=DC50, ground=GND, dc=DC]
    DefaultValue: dc
    ReadOnly: never
    Description: Sets or queries the signal coupling type at the input of the trigger circuit.

  Property Level
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = invoke(get(get(obj, 'Parent'), 'Util'), 'getproperty', 'TRig_LeVel?', '%g')
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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invoke(get(get(obj, 'Parent'), 'Util'), 'setproperty', 'TRig_LeVel', propertyValue);
    PermissibleType: Double none
    DefaultValue: 0.0
    ReadOnly: never
    Description: Sets the oscilloscope primary trigger level.  Max and Min values are dependent on the scale of channel type.  The instrument offers a large but discrete set of values for this property.  Incorrect values will be coerced to valid values by the instrument.

  Property Mode
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = invoke(get(get(obj, 'Parent'), 'Util'), 'getproperty', 'TRig_MoDe?', '%s');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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invoke(get(get(obj, 'Parent'), 'Util'), 'setproperty', 'TRig_MoDe', propertyValue);
    PermissibleType: String enum [auto=AUTO, run=NORM, single=SINGLE, stop=STOP]
    DefaultValue: auto
    ReadOnly: never
    Description: Sets the trigger mode for the edge trigger type.

  Property Slope
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = invoke(get(get(obj, 'Parent'), 'Util'), 'getproperty', 'TRig_SLope?', '%s');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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invoke(get(get(obj, 'Parent'), 'Util'), 'setproperty', 'TRig_SLope', propertyValue);
    PermissibleType: String enum [falling=NEG, rising=POS]
    DefaultValue: rising
    ReadOnly: never
    Description: Selects a rising or falling slope for the main edge trigger.  This is equivalent to setting Slope in the Trigger menu.

  Property Source
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
       %get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % queries the instrument
      invoke(util, 'sendcommand', 'TRig_SElect?')

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');

      % returns the just the source value
      propertyValue = idn{3};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % queries the instrument
      invoke(util, 'sendcommand', 'TRig_SElect?')

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');

      % determines what code to send to the instrument
      to_interface = sprintf('TRig_SElect %s,SR,%s',idn{1},propertyValue);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface)
    PermissibleType: String enum [channel1=C1, channel2=C2, external=EX, external10=EX10, channel3=C3, channel4=C4, channel5=C5, channel6=C6, channel7=C7, channel8=C8, channel9=C9, channel10=C10, channel11=C11, channel12=C12, channel13=C13, channel14=C14, channel15=C15, channel16=C16, channel17=C17, channel18=C18, channel19=C19, channel20=C20, channel21=C21, channel22=C22, channel23=C23, channel24=C24, channel25=C25, channel26=C26, channel27=C27, channel28=C28, channel29=C29, channel30=C30, channel31=C31, channel32=C32, channel33=C33, channel34=C34, channel35=C35, channel36=C36, channel37=C37, channel38=C38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]
    DefaultValue: channel1
    ReadOnly: never
    Description: Sets of the source for the main edge trigger.  This is equivalent to setting Source in the Trigger menu.

  Property TriggerType
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % queries the instrument
      invoke(util, 'sendcommand', 'TRig_SElect?')

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');

      % gets just the trigger type
      propertyValue = idn{1};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % determines what code to send to the instrument
      to_interface = sprintf('TRig_SElect %s',propertyValue);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface)
    PermissibleType: String enum [edge=EDGE, drop=DROP, glitch=GLIT, interval=INTV, stateQualified=SQ, edgeQualified=TEQ, standard=STD, singleSource=SNG]
    DefaultValue: edge
    ReadOnly: never
    Description: Sets the type of oscilloscope trigger.  This is equivalent to setting Type in the Trigger menu.

  Method trigger
    MCode:
      function trigger(obj)
      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
      invoke(get(get(obj, 'Parent'), 'Util'), 'sendcommand', '*TRG');
    Description: TRIGGER Trigger the instrument.

      INVOKE(OBJ,'TRIGGER') performs a Group Execute trigger.

Group util
  Size: 1
  Mappings ChannelMap Command="util1" Index="1"

  Method buildheader
    MCode:
      function header = buildheader(obj, msgLength, operationFlags, sequenceNumber)
      %BUILDHEADER Builds the LeCroy VICP header
      %
      % Usage:
      %   header = buildheader(msgLength,{{operationFlag},{sequenceNumber}});
      %
      %   msgLength is the length of the message you want to send.
      %   operationFlags {optional} is a structure holding the operation
      %           information of DATA,REMOTE,LOCKOUT,CLEAR,SRQ,SERIALPOLL,EOI.
      %           It may be passes as an empty array or struct.
      %   sequenceNumber {optional} is the sequence of data when splitting data
      %           across packets.
      %
      %   header is the 8 byte header needed for the message
      %
      % VICP Headers:
      %
      %	    Byte	Description
      %	    ------------------------------------------------
      %		 0		Operation
      %		 1		Version		1 = version 1
      %		 2		Sequence Number { 1..255 }, (was unused until June 2003)
      %		 3		Unused
      %	 	 4		Block size, MSB	 (not including this header)
      %		 5		Block size
      %		 6		Block size
      %		 7		Block size, LSB

          operationStruct.Data = true;        % This is always true but leaving it for consistency
          operationStruct.Remote = false;     % Remote control
          operationStruct.Lockout = false;    % Lockout front panel
          operationStruct.Clear = false;      % Clear
          operationStruct.SRQ = false;        %
          operationStruct.SerialPoll = false; %
          operationStruct.EOI = true;         % End Of Message

          % With no arguments, return the default header parameters.
          if ~exist('msgLength', 'var')
              header = operationStruct;
              return
          end

          % If flags are passed, use them in place of the defualts.
          if (exist('operationFlags','var') && ~isempty(operationFlags))
              names = fieldnames(operationFlags);
              for field=names
                  operationStruct.(field) = operationFlags.(field);
              end
          end

          % If user did not specify the SequenceNumber then defualt to 1.
          if ~exist('sequenceNumber', 'var')
              sequenceNumber = 1;
          end

          % Build Operation Flag for header
          operation =   uint8(0);
          operation =	bitset(operation,8,operationStruct.Data);       % 0x80 Data block
          operation =	bitset(operation,7,operationStruct.Remote);     % 0x40 Remote Mode
          operation =	bitset(operation,6,operationStruct.Lockout);    % 0x20 Local Lockout (Lockout front panel)
          operation =	bitset(operation,5,operationStruct.Clear);      % 0x10 Device Clear (if sent with data, clear occurs before block is passed to parser)
          operation =	bitset(operation,4,operationStruct.SRQ);        % 0x08 SRQ (Device -> PC only)
          operation =	bitset(operation,3,operationStruct.SerialPoll); % 0x04 SerialPoll
          operation =	bitset(operation,1,operationStruct.EOI);        % 0x01 Block terminated in EOI

          header = zeros(1,8,'uint8');        % Initialize header size
          header(1) = operation;              % Operation Byte
          header(2) = uint8(1);               % Version
          header(3) = uint8(sequenceNumber);  % Seq
          header(4) = 0;                      % Reserved

          % Build the length info for header
          for i=1:4
              placeValue = 256^(4-i);
              header(4+i) = uint8(floor(msgLength/placeValue));
              msgLength = mod(msgLength, placeValue);
          end
          header = char(header);
    Description: BUILDHEADER Builds the LeCroy VICP header
 
       Usage:
         header = INVOKE(obj, 'buildheader', msgLength,{{operationFlag},{sequenceNumber)));

         msgLength is the length of the message you want to send.
         operationFlags {optional} is a structure holding the operation
                 information of DATA,REMOTE,LOCKOUT,CLEAR,SRQ,SERIALPOLL,EOI.
         sequenceNumber {optional} is the sequence of data when splitting data
                 across packets.

         header is the 8 byte header needed for the message

  Method getproperty
    MCode:
      function propertyValue = getproperty(obj, property, fmt)
      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
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % queries the instrument
      invoke(util, 'sendcommand',  property);

      % Retrieve the result from the instrument.
      propertyValue = invoke(util, 'readresponse', fmt);

      % Remove whitespace and convert to the desired format.
      if ischar(propertyValue)
          propertyValue = regexp(propertyValue, '(\S+)', 'tokens', 'once');
          propertyValue = propertyValue{1};
          propertyValue = sscanf(propertyValue, fmt);
      end

  Method parseheader
    MCode:
      function [msgLength, operationFlags, sequenceNumber] = parseheader(obj, header)
      %PARSEVICPHEADER Parses the LeCroy VICP header
      %
      % Usage:
      %   [msgLength, operationalFlags, sequenceNumber] = parseVicpHeader(header);
      %
      %   header is the 8 byte message header from a LeCroy VICP message.
      %
      %   msgLength is the length in bytes of the accompanying message.
      %   operationFlags is a structure holding the operation
      %           information of DATA,REMOTE,LOCKOUT,CLEAR,SRQ,SERIALPOLL,EOI.
      %   sequenceNumber is the sequence of data when splitting data
      %           across packets.
      %
      % VICP Headers:
      %
      %	    Byte	Description
      %	    ------------------------------------------------
      %		 0		Operation
      %		 1		Version		1 = version 1
      %		 2		Sequence Number { 1..255 }, (was unused until June 2003)
      %		 3		Unused
      %	 	 4		Block size, MSB	 (not including this header)
      %		 5		Block size
      %		 6		Block size
      %		 7		Block size, LSB

          % The header must be 8 bytes
          headerLength = 8;
          if length(header)~=headerLength
              error('parseheader::Invalid header argument.  Header must be 8 bytes.')
          end

          % Extract the distinct portions of the header
          operation = uint8(header(1));       % Operation Byte
          version   = double(header(2));      % Version
          sequenceNumber = double(header(3));	% Seq
          %header(4);                         % Reserved and unused

          % Parse the operation
          operationFlags.Data    = bitget(operation,8);    % 0x80 Data block
          operationFlags.Remote  = bitget(operation,7);    % 0x40 Remote Mode
          operationFlags.Lockout = bitget(operation,6);    % 0x20 Local Lockout (Lockout front panel)
          operationFlags.Clear   = bitget(operation,5);    % 0x10 Device Clear (if sent with data, clear occurs before block is passed to parser)
          operationFlags.SRQ     = bitget(operation,4);    % 0x08 SRQ (Device -> PC only)
          operationFlags.SerialPoll = bitget(operation,3); % 0x04 SerialPoll
          operationFlags.EOI     = bitget(operation,1);    % 0x01 Block terminated in EOI

          % Parse the length
          msgLength = 0;
          for i=1:4
              msgLength = msgLength + header(i+4)*256^(4-i);
          end
    Description: PARSEHEADER Parses the LeCroy VICP header

       Usage:
         [msgLength, operationalFlags, sequenceNumber] = INVOKE(obj, 'parseheader', header);

         header is the 8 byte message header from a LeCroy VICP message.  

         msgLength is the length in bytes of the accompanying message.
         operationFlags is a structure holding the operation
                 information of DATA,REMOTE,LOCKOUT,CLEAR,SRQ,SERIALPOLL,EOI.
         sequenceNumber is the sequence of data when splitting data
                 across packets.

  Method readbin
    MCode:
      function data = readbin(obj, type)
      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
      device = get(obj, 'Parent');
      driverData = get(device, 'driverData');

      %get the interface
      interface = get(device, 'Interface');

      % Initialize the result.
      data = [];

      % Determine the size of each element to be read.
      sampleElement = cast(1, type);
      sampleElementProperties = whos('sampleElement');
      elementSize = sampleElementProperties.bytes;

      if driverData.isTcpip
      %RECEIVEVICPMESSAGE receive the message using LeCroy's VCIP packet format
      %
      % Usage:
      %   message = receiveVicpMessage(tcpipObj)

          EOI = false;
          headerLength = 8;
          % Read and concatenate until an EOI is found.
          while ~EOI
              header = fread(interface, headerLength, 'uint8');
              [dataLength, operationFlags, sequenceNumber] = invoke(obj, 'parseheader', header);
              dataLength = dataLength/elementSize;
              data = [data; fread(interface, dataLength, type)];
              EOI = operationFlags.EOI;
          end

      else
          % Read one less than the InputBufferSize to allow us to check for EOI
          elementsToRead = get(interface, 'InputBufferSize')/elementSize;
          msg = [];
          foundEoiMsg = 'The EOI line was asserted before SIZE values were available.';
          timeoutSubMsg  = 'timeout';
          % Read and concatenate while there is no EOI or timeout.
          % If the data to be read is exactly InputBufferSize, FREAD will fail with
          % a timeout.  This should be rare however.
          while isempty(msg) %(~strcmp(msg, foundEoiMsg) || isempty(findstr(msg, timeoutSubMsg)))
              [newData, count, msg] = fread(interface, elementsToRead, type);
              data = [data; newData];
          end

          % TODO: If the msg was not a timeout or EOI, it should be reported.
      end

      %data = cast(data, type);

  Method readresponse
    MCode:
      function msg = readresponse(obj, fmt)
      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
      % Make sure fmt was passed before reading the data.
      if ~exist('fmt', 'var')
          error('Util::READRESPONSE requires two arguments');
      end

      % Read all available input and format it appropriately.
      msg = sscanf(char(invoke(obj, 'readbin', 'int8')), [fmt, '\n']);

  Method scanresponse
    MCode:
      function out = scanresponse(obj)
      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
      %read the value
      response = invoke(obj, 'readresponse', '%s');

      % This behaves much like SCANSTR
      % by splitting the string into a cell array.
      delimiter = ',; ';
      format = '%s';

      if ~ischar(response)
          response = char(response);
      end

      [data, count, msg] = sscanf(response, '%c');

      out=strread(data,format,'delimiter',delimiter);
      for i = 1:length(out)
          if ~isnan(str2double(out{i}))
              out{i} = str2double(out{i});
          end
      end

  Method sendbin
    MCode:
      function sendbin(obj, data, type)
      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
      % Calculate the data size.
      s = whos('data');

      device = get(obj, 'Parent');
      driverData = get(device, 'driverData');

      %get the interface
      interface = get(device, 'Interface');

      if driverData.isTcpip
          MAXPACKET = 2^10;

          % Check for correct size of msg
          if 1~=min(size(data))
              error('MSG must be a vector.')
          end

      %     if length(data)>MAXPACKET
      %         error('We currently only support sending messages under 2k long');
      %     end

          header = invoke(obj, 'buildheader', length(data));
          fwrite(interface, [header,data], type);

      else
          fwrite(interface, data, type);
      end

  Method sendcommand
    MCode:
      function sendcommand(obj, cmd)
      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
      invoke(obj, 'sendbin', cmd, 'char'); %perhaps this should be 'char'

  Method setproperty
    MCode:
      function setproperty(obj, property, propertyValue)
      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
      % build the command string with either a string or numeric argument
      if ischar(propertyValue)
          fmt = '%s %s';
      else
          fmt = '%s %g';
      end
      cmd = sprintf(fmt, property, propertyValue);
      % queries the instrument
      invoke(obj, 'sendcommand', cmd);

Group waveform
  Size: 1
  Mappings ChannelMap Command="Waveform1" Index="1"

  Property ByteOrder
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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propertyValue = invoke(get(get(obj, 'Parent'), 'Util'), 'getproperty', 'Comm_ORDer?', '%s');
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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invoke(get(get(obj, 'Parent'), 'Util'), 'setproperty', 'Comm_ORDer', propertyValue);
    PermissibleType: String enum [bigEndian=HI, littleEndian=LO]
    DefaultValue: littleEndian
    ReadOnly: never
    Description: Sets or queries which byte of binary waveform data is transmitted first during a waveform transfer.

  Property EndingPoint
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % queries the instrument
      invoke(util, 'sendcommand', 'WaveForm_SetUp?')

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');
      endpnt = idn{6}+idn{4};

      % returns the value calculated
      propertyValue = endpnt;
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % queries the instrument
      invoke(util, 'sendcommand', 'WaveForm_SetUp?')

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');
      endpt = propertyValue - idn{6};

      % sets the instrument
      if(endpt < 0)
          warning('endpoint needs to be larger then the first point')
      else
          invoke(util, 'sendcommand', sprintf('WaveForm_SetUp  NP,%i',endpt));
      end
    PermissibleType: Double bounded [Max="2500.0" Min="0.0"]
    DefaultValue: 1.0
    ReadOnly: never
    Description: Sets or queries the ending point for waveformm data transfers.

  Property FirstPoint
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % queries the instrument
      invoke(util, 'sendcommand', 'WaveForm_SetUp?')

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');

      % returns only the first point
      propertyValue = idn{6};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % sets the instrument
      invoke(util, 'sendcommand', sprintf('WaveForm_SetUp  FP,%i',propertyValue));
    PermissibleType: Double bounded [Max="2500.0" Min="0.0"]
    DefaultValue: 1.0
    ReadOnly: never
    Description: Sets or queries the starting point for waveformm data transfers.

  Property MaxNumberPoint
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % queries the instrument
      invoke(util, 'sendcommand', 'WaveForm_SetUp?')

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');

      % returns only the maxnumberpoint
      propertyValue = idn{4};
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % determines what code to send to the instrument
      to_interface = sprintf('WaveForm_SetUp  NP,%i',propertyValue);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface)
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
    Description: The maximum number of acqusition data points.

  Property Precision
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % queries the instrument
      invoke(util, 'sendcommand', 'COMM_FORMAT?')

      % retrieve the value from the instrument
      idn = invoke(util, 'scanresponse');
      propertyValue = sprintf('%s,%s',idn{2},idn{3});
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % determines what code to send to the instrument
      to_interface = sprintf('COMM_FORMAT DEF9, %s ',propertyValue);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface)
    PermissibleType: String enum [ASCII=WORD,HEX, int16=WORD,BIN, int8=BYTE,BIN]
    DefaultValue: ASCII
    ReadOnly: never
    Description: Sets or queries the precision  for waveformm data transfers.

  Method readwaveform
    MCode:
      function [y, x, yunit, xunit, header] = readwaveform(obj, source, scaleWaveform)
      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
      % sees if there is any input
      if (nargin == 0)
          return;
      end

      % initializes everything to empty/false/unknown
      scale = true;
      y = [];
      x = [];
      yunit = 'unknown';
      xunit = 'unknown';

      % checks to see if the source input is a valid value
      validValues = {'channel1','channel2','channel3','channel4','channel5','channel6','channel7','channel8','channel9','channel10',...
                     'channel11','channel12','channel13','channel14','channel15','channel16','channel17','channel18','channel19','channel20',...
      			   'channel21','channel22','channel23','channel24','channel25','channel26','channel27','channel28','channel29','channel30',...
      			   'channel31','channel32','channel33','channel34','channel35','channel36','channel37','channel38','channel39','channel40',...
      			   'channel41','channel42','channel43','channel44','channel45','channel46','channel47','channel48','channel49','channel50',...
      			   'channel51','channel52','channel53','channel54','channel55','channel56','channel57','channel58','channel59','channel60',...
      			   'channel61','channel62','channel63','channel64','channel65','channel66','channel67','channel68','channel69','channel70',...
      			   'channel71','channel72','channel73','channel74','channel75','channel76','channel77','channel78','channel79','channel80',...
      			   'traceA','traceB','traceC','traceD','math1','math2','math3','math4','math5','math6','math7','math8','math9','math10','math11','math12',...
      			   'memory1','memory2','memory3','memory4','memory5','memory6','memory7','memory8','memory9','memory10','memory11','memory12'};
      scopeValues = {'C1', 'C2', 'C3', 'C4', 'C5', 'C6', 'C7', 'C8', 'C9', 'C10',...
      			   'C11', 'C12', 'C13', 'C14', 'C15', 'C16', 'C17', 'C18', 'C19', 'C20',...
      			   'C21', 'C22', 'C23', 'C24', 'C25', 'C26', 'C27', 'C28', 'C29', 'C30',...
      			   'C31', 'C32', 'C33', 'C34', 'C35', 'C36', 'C37', 'C38', 'C39', 'C40',...
      			   'C41', 'C42', 'C43', 'C44', 'C45', 'C46', 'C47', 'C48', 'C49', 'C50',...
      			   'C51', 'C52', 'C53', 'C54', 'C55', 'C56', 'C57', 'C58', 'C59', 'C60',...
      			   'C61', 'C62', 'C63', 'C64', 'C65', 'C66', 'C67', 'C68', 'C69', 'C70',...
      			   'C71', 'C72', 'C73', 'C74', 'C75', 'C76', 'C77', 'C78', 'C79', 'C80',...
      			   'TA', 'TB', 'TC', 'TD','F1', 'F2', 'F3', 'F4', 'F5', 'F6', 'F7', 'F8', 'F9', 'F10', 'F11', 'F12',...
      			   'M1', 'M2', 'M3', 'M4', 'M5', 'M6', 'M7', 'M8', 'M9', 'M10', 'M11', 'M12'};
      idx = strmatch(source,validValues, 'exact');

      % gives error if the channel is not a valid value
      if (isempty(idx))
          error('Invalid SOURCE. CHANNEL must be one of: channel1, channel2, channel3, channel4, ... channel79, channel80, traceA, traceB, traceC, traceD, memory1, memory2, memory3 , memory4... memory11, memory12');
      end

      % sets the source to its property value
      trueSource = scopeValues{idx};

      % checks to see if the scale entered is a valid value
      if exist('scaleWaveform', 'var')
              scale = scaleWaveform;
      end

      device = get(obj, 'Parent');
      util = get(device, 'Util');

      % get the driverdata
      driverData = get(device, 'DriverData');
      wd = driverData.wd;

      % stores the old user setings
      oldPrecision = get(obj, 'Precision');
      oldByteOrder = get(obj, 'ByteOrder');

      % changes the precision and byteorder so that wave form can be read
      set(obj, 'Precision', 'int8');
      set(obj, 'ByteOrder', 'littleEndian');

      % gets wave from the instrument
      try
          % Issue the curve transfer command.
          to_interface = sprintf('%s:WaveForm? ALL',trueSource);
          invoke(util, 'sendcommand', to_interface);

          % get wave from the instrument
          raw = invoke(util, 'readbin', 'int8');

          % separates the data from the descriptor block
          y = raw(362:end);

          % check if we read in '0A' hex for line feed, if we did then
          % discard it from the output waveform
          if (y(end) == 10)
              y = y(1:end-1);
          end
          header = raw(1:361)';
      catch
          % return the settings back to what the user had them and display
          % an error that tells why the waveform was not read
          set(obj, 'Precision', oldPrecision);
          set(obj, 'ByteOrder', oldByteOrder);
          error(lasterr)
      end

      % make sure that data was
      if (isempty(raw))
          % returns the settings back to what the user had them and displays
          % an error that the waveform did not get read in
          set(obj, 'Precision', oldPrecision);
          set(obj, 'ByteOrder', oldByteOrder);
          error('An error occurred while reading the waveform.');
      end

      xunit=wd.getHORUNIT(header);
      yunit=wd.getVERTUNIT(header);

      % Rescale the waveform is requested.
      if scale
          % rescale the Y
          y = y .* wd.getVERTICAL_GAIN(header) - wd.getVERTICAL_OFFSET(header);
      end

      % Calculate the horizontal points.
      x = ((0:double(wd.getWAVE_ARRAY_COUNT(header))).*wd.getHORIZ_INTERVAL(header)...
          + wd.getHORIZ_OFFSET(header))';

      x = x';
      y = y';

      if length(x) > length(y)
          x = x(1:length(y));
      end

      % Restore initial settings
      set(obj, 'Precision', oldPrecision);
      set(obj, 'ByteOrder', oldByteOrder);
    Description: READWAVEFORM Transfer waveforms from the oscilloscope to MATLAB.

      [Y, T, XUNIT, YUNIT, HEADER] = INVOKE(obj, 'readwaveform', CHANNEL) returns a waveform from the instrument,
      using channel string, CHANNEL.  Valid channel values are channel&lt;x&gt;, trace&lt;x&gt;, and
      memory&lt;z&gt;, where &lt;x&gt; is a number between 1 and the number of channels on the instrument,  &lt;y&gt; is a letter between A and the number of reference channels on the instrument, and &lt;z&gt; is a number between 1 and the number of memory locations on the instrument.

      [Y, T, XUNIT, YUNIT, HEADER] = INVOKE(obj, 'readwaveform', CHANNEL, SCALE) returns the data scaled to real units if SCALE is true, or as raw data if SCALE is false.  The default value for SCALE is true.



      To read the waveform data points the interface object associated with the device
      object must have a sufficiently large InputBufferSize property value.  If you receive
      an error about the buffer size being to small, or have difficulty reading a waveform,
      verify that it is large enough.  The size must be greater than two times the number
      of points in the waveform, plus approximately 50 bytes for header information.

      Example:
      	[y, t] = invoke(obj, 'readwaveform', 'channel1');
      	[y, t] = invoke(obj, 'readwaveform', 'referenceA', false);

      Example changing the buffer size:
      	% Note the device object must be closed.
      	interfaceObj = get(deviceObj, 'interface');
      	% Allow for a 10,000 point waveform with a little extra room.
      	set(interfaceObj, 'InputBufferSize', 21000);
      	connect(deviceObj);
      	[y, t] = invoke(obj, 'readwaveform', 'channel1');

  Method storewaveform
    MCode:
      function storewaveform(obj, channel, location)
      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
      % get the device
      device = get(obj, 'Parent');
      util = get(device, 'Util');

      scopeValuesC = {'C1', 'C2', 'C3', 'C4', 'C5', 'C6', 'C7', 'C8', 'C9', 'C10',...
      				'C11', 'C12', 'C13', 'C14', 'C15', 'C16', 'C17', 'C18', 'C19', 'C20',...
      				'C21', 'C22', 'C23', 'C24', 'C25', 'C26', 'C27', 'C28', 'C29', 'C30',...
      				'C31', 'C32', 'C33', 'C34', 'C35', 'C36', 'C37', 'C38', 'C39', 'C40',...
      				'C41', 'C42', 'C43', 'C44', 'C45', 'C46', 'C47', 'C48', 'C49', 'C50',...
      				'C51', 'C52', 'C53', 'C54', 'C55', 'C56', 'C57', 'C58', 'C59', 'C60',...
      				'C61', 'C62', 'C63', 'C64', 'C65', 'C66', 'C67', 'C68', 'C69', 'C70',...
      				'C71', 'C72', 'C73', 'C74', 'C75', 'C76', 'C77', 'C78', 'C79', 'C80',...
      				'TA', 'TB', 'TC', 'TD', 'F1', 'F2', 'F3', 'F4', 'F5', 'F6', 'F7', 'F8', 'F9', 'F10', 'F11', 'F12'};
      scopeValuesM = {'M1', 'M2', 'M3', 'M4', 'M5', 'M6', 'M7', 'M8', 'M9', 'M10', 'M11', 'M12'};

      % checks to see if location is a valid value
      idxM = strmatch(lower(location), {'memory1','memory2','memory3','memory4','memory5','memory6','memory7','memory8','memory9','memory10','memory11','memory12'}, 'exact');
      if (isempty(idxM))
          error('Invalid value.LOCATION must be one of: memory1, memory2, memory3, memory4,... memory11, memory12');
      end
      trueLocation = scopeValuesM{idxM};

      % checks to see if channel is a valid value
      idxC = strmatch(lower(channel),{'channel1','channel2','channel3','channel4','channel5','channel6','channel7','channel8','channel9','channel10',...
      								'channel11','channel12','channel13','channel14','channel15','channel16','channel17','channel18','channel19','channel20',...
      								'channel21','channel22','channel23','channel24','channel25','channel26','channel27','channel28','channel29','channel30',...
      								'channel31','channel32','channel33','channel34','channel35','channel36','channel37','channel38','channel39','channel40',...
      								'channel41','channel42','channel43','channel44','channel45','channel46','channel47','channel48','channel49','channel50',...
      								'channel51','channel52','channel53','channel54','channel55','channel56','channel57','channel58','channel59','channel60',...
      								'channel61','channel62','channel63','channel64','channel65','channel66','channel67','channel68','channel69','channel70',...
      								'channel71','channel72','channel73','channel74','channel75','channel76','channel77','channel78','channel79','channel80',...
      								'tracea','traceb','tracec','traced','math1','math2','math3','math4','math5','math6','math7','math8','math9','math10','math11','math12'} , 'exact');
      if (isempty(idxC))
          error('Invalid value.CHANNEL must be one of: channel1, channel2,... channel79, channel80, traceA, traceB, traceC, traceD, math1,... math12');
      end
      trueChannel = scopeValuesC{idxC};

      % determines what code to send to the instrument
      to_interface = sprintf('STOre %s,%s',trueChannel,trueLocation);

      % sets the instrument
      invoke(util, 'sendcommand', to_interface)
    Description: STOREWAVEFORM Save a waveform to oscilloscope memory.

      INVOKE(OBJ, 'storewaveform', CHANNEL, LOCATION) saves the waveform from CHANNEL to memory location, LOCATION.

      Example:
      	invoke(obj, 'storewaveform', 'channel1','memory1');
